PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': '', '': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1440, 900]
  expName = OperationSpanTask
  keyboardBackend = ioHub
  logging level = debug
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Routines
  Routine warning1
    TextComponent text_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.5
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      text:
        You will now begin a new trial.
  Routine mem
    TextComponent text_2
      color = blue
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Letter
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  Routine Recall
    TextComponent text_3
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = recall
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    KeyboardComponent key_resp_3
      allowedKeys = 'q','r','t','p','s','d','f','g','h','j','k','l','z','x','c','v','b','n','m','1'
      correctAns = $CorRec
      forceEndRoutine = False
      startVal [time (s)] = 0
      store = all keys
      storeCorrect = True
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    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
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    TextboxComponent textbox
      bold = False
      editable = True
      letterHeight = 0.1
      pos = (0, -0.3)
      size = (None, None)
      startVal [time (s)] = 0.0
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  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.3
      text [set every repeat] = $Stim
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    KeyboardComponent key_resp_2
      allowedKeys [set every repeat] = 'left','right'
      correctAns = $Response
      forceEndRoutine = True
      startVal [time (s)] = 0.3
      storeCorrect = True
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  Routine Instructions2
    TextComponent text_7
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Immediately after you answer, you will see a single letter on the screen.Your task is to read the letter and remember it. The letter will only stay on the screen briefly, so you will need to read it as soon as it appears. After the letter has disappeared, a new equation to verify will appear and this cycle will continue.

        Press the SPACE bar to continue.
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this task, you will do two things:
        First, you will see a math equation such as
         3 + 4 = 7. Your job is to read the equation and verify it as either true or false. Press the LEFT arrow on the keyboard if the equation is correct and press the RIGHT arrow on the keyboard if it is incorrect.

        Press the SPACE bar to continue.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1.0
      store = nothing
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  Routine Instructions3
    TextComponent text_8
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        At the end of a trial you will see 'recall' on the screen. At this time you should type all of the letters you were supposed to remember from this trial. If you can't remember a particular letter, press the ‘1’ key in its place.  When you have finished entering letters for a trial, press the SPACE bar to advance to the next trial. You should not press the SPACE bar between letters.

        It is very important that you try to remember the letters in their correct serial positions or they will be counted wrong. Please do your best to respond accurately on both the equation and recall portions of this task.

        Press the SPACE bar to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine PracInst
    TextComponent text_6
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You will now begin practice trials.

        As a reminder, if an equation is correct, press the LEFT arrow key. If an equation is incorrect, press the RIGHT arrow key.

        When the “recall” prompt appears, do your best to recall the letters that you were presented.

        Press the SPACE bar to continue.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine End
    TextComponent text_9
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of this experiment. Please return to the survey screen and proceed as instructed.

        Press the SPACE bar to close this window.
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  Routine Instructions2
  Routine Instructions3
  Routine PracInst
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('BlockNumber', 'Block1.xlsx')]),
      OrderedDict([('BlockNumber', 'Block2.xlsx')]),
      OrderedDict([('BlockNumber', 'Block3.xlsx')])]
    LoopInitiator practrials loopType="TrialHandler"
      Selected rows = 0:2
      conditionsFile = $BlockNumber
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator practrials
    Routine Recall
  LoopTerminator practice
  LoopInitiator span2 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 0
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    conditions:
      [OrderedDict([('BlockNumber', 'Block1.xlsx')]),
      OrderedDict([('BlockNumber', 'Block2.xlsx')]),
      OrderedDict([('BlockNumber', 'Block3.xlsx')])]
    Routine warning1
    LoopInitiator trials2 loopType="TrialHandler"
      Selected rows = 2:4
      conditionsFile = $BlockNumber
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trials2
    Routine Recall
  LoopTerminator span2
  LoopInitiator span3 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('BlockNumber', 'Block1.xlsx')]),
      OrderedDict([('BlockNumber', 'Block2.xlsx')]),
      OrderedDict([('BlockNumber', 'Block3.xlsx')])]
    Routine warning1
    LoopInitiator trials3 loopType="TrialHandler"
      Selected rows = 4:7
      conditionsFile = $BlockNumber
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trials3
    Routine Recall
  LoopTerminator span3
  LoopInitiator span4 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('BlockNumber', 'Block1.xlsx')]),
      OrderedDict([('BlockNumber', 'Block2.xlsx')]),
      OrderedDict([('BlockNumber', 'Block3.xlsx')])]
    Routine warning1
    LoopInitiator trials4 loopType="TrialHandler"
      Selected rows = 7:11
      conditionsFile = $BlockNumber
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trials4
    Routine Recall
  LoopTerminator span4
  LoopInitiator span5 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('BlockNumber', 'Block1.xlsx')]),
      OrderedDict([('BlockNumber', 'Block2.xlsx')]),
      OrderedDict([('BlockNumber', 'Block3.xlsx')])]
    Routine warning1
    LoopInitiator trials5 loopType="TrialHandler"
      Selected rows = 11:16
      conditionsFile = $BlockNumber
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trials5
    Routine Recall
  LoopTerminator span5
  LoopInitiator span6 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('BlockNumber', 'Block1.xlsx')]),
      OrderedDict([('BlockNumber', 'Block2.xlsx')]),
      OrderedDict([('BlockNumber', 'Block3.xlsx')])]
    Routine warning1
    LoopInitiator trials6 loopType="TrialHandler"
      Selected rows = 16:22
      conditionsFile = $BlockNumber
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trials6
    Routine Recall
  LoopTerminator span6
  LoopInitiator span7 loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = Blocks.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('BlockNumber', 'Block1.xlsx')]),
      OrderedDict([('BlockNumber', 'Block2.xlsx')]),
      OrderedDict([('BlockNumber', 'Block3.xlsx')])]
    Routine warning1
    LoopInitiator trials7 loopType="TrialHandler"
      Selected rows = 22:29
      conditionsFile = $BlockNumber
      loopType = sequential
      nReps = 1
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      Routine trial
      Routine mem
    LoopTerminator trials7
    Routine Recall
  LoopTerminator span7
  Routine End
